CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:1
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    Select the rule criteria:and (file does contain "_full") (file doesnot contain "cropmask") (file doesnot contain "_ilastik") (file doesnot contain "_spill")
    Name to assign these images:FullStack
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does endwith "_Probabilities.tiff")
    Name to assign these images:probab
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Single image location:file:/mnt/bbvolume/server_homes/vitoz/Git/cyTOFcompensation/data/Figure_4/IMC_image/analysis/imc_full_sm.tiff   
    Name to assign this image:sm
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectSpilloverApply:[module_num:5|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
    Select the input image:FullStack
    Name the output image:SpillCorrected
    Select the spillover function image:sm
    Spillover correction method:LeastSquares
    Select the input image:FullStack
    Name the output image:SpillNNLSCorrected
    Select the spillover function image:sm
    Spillover correction method:NonNegativeLeastSquares

Smooth Multichannel:[module_num:6|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
    Select the input image:probab
    Name the output image:probab_smooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:0.5
    Edge intensity difference:0.1
    Clip intensities to 0 and 1?:Yes
    Outlier neighbourhood:3
    Outlier Treshold:50.0

ColorToGray bb:[module_num:7|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
    Select the input image:probab_smooth
    Conversion method:Split
    Image type:RGB
    Name the output image:iridium
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
    Convert red to gray?:Yes
    Name the output image:nuc
    Convert green to gray?:Yes
    Name the output image:cyt
    Convert blue to gray?:Yes
    Name the output image:nd
    Convert hue to gray?:Yes
    Name the output image:OrigHue
    Convert saturation to gray?:Yes
    Name the output image:OrigSaturation
    Convert value to gray?:Yes
    Name the output image:OrigValue
    Channel count:1
    Channel number:40
    Relative weight of the channel:1.0
    Image name:Channel1

ImageMath:[module_num:8|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:nucyt
    Image or measurement?:Image
    Select the first image:cyt
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:nuc
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:nuc
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,15
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Automatic
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
MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

FilterObjects:[module_num:11|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
    Name the output objects:Nuclei_filt
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:No
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
IdentifySecondaryObjects:[module_num:12|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
    Select the input objects:Nuclei_filt
    Name the objects to be identified:cells2x
    Select the method to identify the secondary objects:Propagation
    Select the input image:nucyt
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:2
    Threshold strategy:Automatic
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
RescaleObjects:[module_num:13|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
    Select the input objects:cells2x
    Name the output objects:CellsGap
    Select the operation:Downscale objects with a scaling factor
    Factor to scale the object mask:0.5

Resize:[module_num:14|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
    Select the input image:nucyt
    Name the output image:nucyt1x
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.5
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    Interpolation method:Bilinear
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    Additional image count:0

IdentifySecondaryObjects:[module_num:15|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
    Select the input objects:CellsGap
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:nucyt1x
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:2
    Threshold strategy:Automatic
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:SpillCorrected
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    Select method for constructing file names:From image filename
    Select image name for file prefix:FullStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_spillcorr
    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity Multichannel:[module_num:17|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
    Hidden:1
    Select an image to measure:FullStack
    Number of channels:37
    Select objects to measure:Cells

CorrectSpilloverMeasurements:[module_num:18|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
    Select Object:Cells
    Select the measurment to correct for spillover:Intensity_MeanIntensity_FullStack
    Name the output compmeasurement suffix:CompLS
    Select the spillover function image:sm
    Spillover correction method:LeastSquares
    Select Object:Cells
    Select the measurment to correct for spillover:Intensity_MeanIntensity_FullStack
    Name the output compmeasurement suffix:CompNNLS
    Select the spillover function image:sm
    Spillover correction method:NonNegativeLeastSquares

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:SpillNNLSCorrected
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    Select method for constructing file names:From image filename
    Select image name for file prefix:FullStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_spillcorr_nnls
    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:20|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
    Select the type of image to save:Objects
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    Select the objects to save:Cells
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    Select method for constructing file names:From image filename
    Select image name for file prefix:FullStack
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask
    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Grayscale
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:21|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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